PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'test', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = visual_oddball_2ob
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine _welcome
    RoutineSettingsComponent _welcome
      saveStartStop = False
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    TextComponent text_welcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome! This task will take approximately 10 minutes.

        Please take a moment to adjust the chair height, chin rest, and sitting posture. Make sure that you feel comfortable and can stay still for a while.


        When you are ready, press any of the white keys to begin.
    KeyboardComponent key_welcome
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_welcome
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/welcome.wav
      startVal [time (s)] = 0.8
      syncScreenRefresh = False
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  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 111 (task ID for visual double oddball P300 task)
        task_ID_code = 111
        print("Starting experiment: < Visual Double Oddball Task >. Task ID:", task_ID_code)

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        regular_p300_code = 41
        oddball_p300_code = 42
        distractor_p300_code = 43
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name in ['Cedrus C-POD', 'Cedrus StimTracker Quad'], "Incorrect XID device detected."
            if dev.device_name == 'Cedrus C-POD':
                pod_name = 'C-POD'
            else:
                pod_name = 'M-POD'
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print(f"{pod_name}<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C/M-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    CodeComponent condition_setup
      Code Type = Py
      Begin Experiment:
        import numpy as np

        TASK_MODE = 'VIS'
        SCHEDULE_COLUMN = 'visual_stimulus_id'

        def configuration_error(message):
            full_message = 'Visual task configuration error: ' + str(message)
            logging.error(full_message)
            raise RuntimeError(full_message)

        def read_csv_rows(csv_path):
            try:
                with csv_path.open('r', encoding='utf-8-sig', newline='') as csv_file:
                    return list(csv.DictReader(csv_file))
            except Exception as err:
                configuration_error(
                    'Could not read {} ({})'.format(csv_path, err)
                )

        def field(row, *names):
            for name in names:
                value = row.get(name, '')
                if value is not None and str(value).strip():
                    return str(value).strip()
            return ''

        def integer_field(row, *names):
            try:
                return int(field(row, *names))
            except (TypeError, ValueError):
                return None

        project_dir = os.path.dirname(os.path.abspath(__file__))
        runtime_assets_dir = project_dir + '\resource'
        allocation_dir = project_dir + '\allocation'
        profiles_path = allocation_dir + '\participant_profiles.csv'

        subject_id = str(expInfo['participant']).strip()
        session_number = int(expInfo['session'])

        profile_matches = [
            row for row in read_csv_rows(profiles_path)
            if field(row, 'participant_id', 'subject_id') == subject_id
        ]
        if len(profile_matches) != 1:
            configuration_error(
                'Expected one participant profile for {!r}; found {}. The CRC '
                'must enter the ID once in participant_profiles.csv.'
                .format(subject_id, len(profile_matches))
            )
        profile_row = profile_matches[0]
        sequence_id = field(profile_row, 'sequence_id')
        pattern_id = field(profile_row, 'pattern_id')
        if not sequence_id or not pattern_id:
            configuration_error('Participant profile is missing sequence_id or pattern_id.')

        schedule_path = allocation_dir + '/pattern_visit_schedule.csv'
        schedule_matches = [
            row for row in read_csv_rows(schedule_path)
            if field(row, 'pattern_id') == pattern_id
            and integer_field(row, 'session', 'visit') == session_number
        ]
        if len(schedule_matches) != 1:
            configuration_error(
                'Expected one schedule row for pattern {} session {}; found {}.'
                .format(pattern_id, session_number, len(schedule_matches))
            )
        schedule_row = schedule_matches[0]
        visual_stimulus_id = field(schedule_row, SCHEDULE_COLUMN)
        if not visual_stimulus_id.startswith('VIS-'):
            configuration_error(
                '{} contains invalid stimulus ID {!r}.'
                .format(SCHEDULE_COLUMN, visual_stimulus_id)
            )

        # SVG files remain the vector masters. PsychoPy 2024.2.2 ImageStim does
        # not load SVG, so deployment also includes matching 1000x1000 PNG copies.
        primary_folder = (
            runtime_assets_dir / 'stimuli' / 'visual' / visual_stimulus_id
        )
        primary_svg_files = sorted(
            path for path in primary_folder.glob('*.svg') if path.is_file()
        ) if primary_folder.is_dir() else []
        primary_files = sorted(
            path for path in primary_folder.glob('*.png') if path.is_file()
        ) if primary_folder.is_dir() else []
        if len(primary_svg_files) != 5:
            configuration_error(
                '{} must contain exactly five SVG masters; found {}.'
                .format(primary_folder, len(primary_svg_files))
            )
        if len(primary_files) != 5:
            configuration_error(
                '{} must contain five PNG deployment copies matching the SVGs; '
                'found {}.'.format(primary_folder, len(primary_files))
            )
        for item_number, (svg_file, png_file) in enumerate(
            zip(primary_svg_files, primary_files), start=1
        ):
            prefix = '{:02d}_'.format(item_number)
            if not svg_file.name.startswith(prefix) or not png_file.name.startswith(prefix):
                configuration_error(
                    'Expected SVG/PNG prefixes 01_ through 05_ in {}.'
                    .format(primary_folder)
                )
            if svg_file.stem != png_file.stem:
                configuration_error(
                    'SVG and PNG stems do not match: {} versus {}.'
                    .format(svg_file.name, png_file.name)
                )
        block_target_files = list(primary_files)
        block_standard_files = primary_files[2:] + primary_files[:2]

        # Main visual distractor rows use:
        # sequence_id, session, task, phase, block,
        # distractor_slot, distractor_id, distractor_file, sha256.
        distractor_csv = allocation_dir + '\visual_distractor_assignments.csv'
        if not distractor_csv.is_file():
            configuration_error('Missing {}.'.format(distractor_csv))
        distractor_rows = read_csv_rows(distractor_csv)

        subject_main_rows = [
            row for row in distractor_rows
            if field(row, 'sequence_id') == sequence_id
            and field(row, 'phase').lower() in ('', 'main')
            and row == TASK_MODE
        ]
        all_subject_files = [
            field(row, 'distractor_file', 'stimulus_file', 'file')
            for row in subject_main_rows
        ]
        all_subject_hashes = [
            field(row, 'sha256').lower() for row in subject_main_rows
        ]
        if len(subject_main_rows) != 200:
            configuration_error(
                'Expected 200 visual distractor rows for {}; found {}.'
                .format(subject_id, len(subject_main_rows))
            )
        if any(not value for value in all_subject_files):
            configuration_error('A main visual distractor row has no file.')
        if len(all_subject_files) != len(set(all_subject_files)):
            configuration_error(
                'A visual distractor file repeats for this participant.'
            )
        if any(not value for value in all_subject_hashes):
            configuration_error('Every visual distractor row must contain sha256.')
        if len(all_subject_hashes) != len(set(all_subject_hashes)):
            configuration_error(
                'Two visual distractors have identical content (duplicate sha256).'
            )
        session_rows = [
            row for row in subject_main_rows
            if integer_field(row, 'session', 'visit') == session_number
        ]
        if len(session_rows) != 20:
            configuration_error(
                'Expected 20 visual distractors for {} session {}; found {}.'
                .format(subject_id, session_number, len(session_rows))
            )
        def resolve_media(relative_value):
            relative_path = Path(relative_value)
            if relative_path.is_absolute() or '..' in relative_path.parts:
                configuration_error(
                    'Distractor paths must be relative: {}'.format(relative_value)
                )
            candidates = [
                study_root + relative_path,
                runtime_assets_dir + '/stimuli/distractors/visual/' +relative_path,
            ]
            for media_path in candidates:
                if media_path.is_file():
                    if media_path.suffix.lower() not in (
                        '.png', '.jpg', '.jpeg', '.bmp', '.tif', '.tiff'
                    ):
                        configuration_error(
                            'Unsupported visual distractor format: {}.'
                            .format(media_path)
                        )
                    return media_path.resolve()
            configuration_error('Missing visual distractor: {}'.format(relative_value))

        def media_sha256(media_path):
            digest = hashlib.sha256()
            with media_path.open('rb') as media_file:
                for chunk in iter(lambda: media_file.read(1024 * 1024), b''):
                    digest.update(chunk)
            return digest.hexdigest()

        distractors_by_block = {block: [] for block in range(1, 6)}
        for row in session_rows:
            block_number = integer_field(row, 'block')
            slot_number = integer_field(row, 'distractor_slot', 'chunk', 'slot')
            if block_number not in distractors_by_block or slot_number not in range(1, 5):
                configuration_error(
                    'Visual distractors require block 1-5 and distractor_slot 1-4.'
                )
            distractor_path = resolve_media(
                field(row, 'distractor_file', 'stimulus_file', 'file')
            )
            expected_sha256 = field(row, 'sha256').lower()
            if media_sha256(distractor_path) != expected_sha256:
                configuration_error(
                    'SHA-256 mismatch for {}.'.format(distractor_path)
                )
            distractors_by_block[block_number].append({
                'slot': slot_number,
                'id': field(row, 'distractor_id', 'stimulus_id') or distractor_path.stem,
                'file': distractor_path,
                'relative_file': distractor_path.relative_to(study_root).as_posix(),
                'sha256': expected_sha256,
            })
        for block_number in distractors_by_block:
            distractors_by_block[block_number].sort(key=lambda item: item['slot'])
            slots = [item['slot'] for item in distractors_by_block[block_number]]
            if slots != [1, 2, 3, 4]:
                configuration_error(
                    'Block {} must contain distractor slots 1,2,3,4 exactly once.'
                    .format(block_number)
                )

        practice_rows = [
            row for row in distractor_rows
            if field(row, 'phase').lower() == 'practice'
            and row in ('', TASK_MODE)
        ]
        if len(practice_rows) != 1:
            configuration_error(
                'The visual distractor CSV must contain exactly one practice row.'
            )
        practice_distractor_file = resolve_media(
            field(practice_rows[0], 'distractor_file', 'stimulus_file', 'file')
        )
        practice_sha256 = field(practice_rows[0], 'sha256').lower()
        if not practice_sha256:
            configuration_error('The practice visual row must contain sha256.')
        if practice_sha256 in set(all_subject_hashes):
            configuration_error(
                'The visual practice distractor duplicates a main distractor.'
            )
        if media_sha256(practice_distractor_file) != practice_sha256:
            configuration_error(
                'SHA-256 mismatch for visual practice distractor {}.'
                .format(practice_distractor_file)
            )

        expInfo['task_mode'] = TASK_MODE
        expInfo['sequence_id'] = sequence_id
        expInfo['pattern_id'] = pattern_id
        expInfo['visual_stimulus_id'] = visual_stimulus_id

        # Fixed ImageStim size applies to every primary and distractor asset.
        VISUAL_STIMULUS_SIZE = (0.40, 0.40)
        regular_file = str(block_standard_files[0])
        oddball_file = str(block_target_files[0])
        distractor_file = str(practice_distractor_file)
        STIMULI = {
            'regular': {'file': regular_file, 'text': 'second image'},
            'oddball': {'file': oddball_file, 'text': 'first image'},
            'distractor': {'file': distractor_file, 'text': 'third image'},
        }

        STIMULUS_DURATION = 0.5
        ITI_RANGE = (1.5, 2.5)
        N_BLOCKS = 5
        CHUNKS_PER_BLOCK = 4
        TRIALS_PER_CHUNK = 10
        TRIALS_PER_BLOCK = CHUNKS_PER_BLOCK * TRIALS_PER_CHUNK
        N_TRIALS = N_BLOCKS * TRIALS_PER_BLOCK

        block_trial_plans = []
        for block_number in range(1, N_BLOCKS + 1):
            target_path = block_target_files[block_number - 1]
            standard_path = block_standard_files[block_number - 1]
            block_plan = []
            for chunk_number in range(1, CHUNKS_PER_BLOCK + 1):
                distractor = distractors_by_block[block_number][chunk_number - 1]
                standard_trial = {
                    'trial_type': 'regular',
                    'stimulus_file': str(standard_path),
                    'stimulus_relative_file': standard_path.relative_to(study_root).as_posix(),
                    'distractor_id': '',
                    'distractor_sha256': '',
                    'distractor_slot': '',
                }
                target_trial = {
                    'trial_type': 'oddball',
                    'stimulus_file': str(target_path),
                    'stimulus_relative_file': target_path.relative_to(study_root).as_posix(),
                    'distractor_id': '',
                    'distractor_sha256': '',
                    'distractor_slot': '',
                }
                distractor_trial = {
                    'trial_type': 'distractor',
                    'stimulus_file': str(distractor['file']),
                    'stimulus_relative_file': distractor['relative_file'],
                    'distractor_id': distractor['id'],
                    'distractor_sha256': distractor['sha256'],
                    'distractor_slot': distractor['slot'],
                }
                inner = (
                    [dict(standard_trial) for _ in range(7)]
                    + [target_trial, distractor_trial]
                )
                np.random.shuffle(inner)
                chunk = [dict(standard_trial)] + inner
                for trial_in_chunk, trial_spec in enumerate(chunk, start=1):
                    trial_spec.update({
                        'block': block_number,
                        'chunk': chunk_number,
                        'trial_in_chunk': trial_in_chunk,
                        'trial_in_block': (
                            (chunk_number - 1) * TRIALS_PER_CHUNK + trial_in_chunk
                        ),
                        'target_relative_file': target_path.relative_to(study_root).as_posix(),
                        'standard_relative_file': standard_path.relative_to(study_root).as_posix(),
                        'iti': (
                            ITI_RANGE[0]
                            + np.random.random() * (ITI_RANGE[1] - ITI_RANGE[0])
                            + STIMULUS_DURATION
                        ),
                    })
                    block_plan.append(trial_spec)
            assert len(block_plan) == TRIALS_PER_BLOCK
            assert sum(item['trial_type'] == 'regular' for item in block_plan) == 32
            assert sum(item['trial_type'] == 'oddball' for item in block_plan) == 4
            assert sum(item['trial_type'] == 'distractor' for item in block_plan) == 4
            block_trial_plans.append(block_plan)
        assert len({
            item['stimulus_relative_file']
            for block_plan in block_trial_plans for item in block_plan
            if item['trial_type'] == 'distractor'
        }) == 20
  Routine trial
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    CodeComponent set_trial_type
      Code Type = Py
      Begin Routine:
        trial_spec = block_trial_plan.pop(0)
        iti = trial_spec['iti']
        stimulus_file = trial_spec['stimulus_file']
        trial_type = trial_spec['trial_type']

        # Derive oddball/distractor flags from trial_type
        shape_is_oddball    = trial_type == "oddball"
        shape_is_distractor = trial_type == "distractor"

        if shape_is_oddball:
            stimuli_code = oddball_p300_code
        elif shape_is_distractor:
            stimuli_code = distractor_p300_code
        else:
            stimuli_code = regular_p300_code

        # Log to data table
        thisExp.addData('trial_type',          trial_type)
        thisExp.addData('shape_is_oddball',    shape_is_oddball)
        thisExp.addData('shape_is_distractor', shape_is_distractor)
        thisExp.addData('iti',                 iti - STIMULUS_DURATION)
        thisExp.addData('block', trial_spec['block'])
        thisExp.addData('chunk', trial_spec['chunk'])
        thisExp.addData('trial_in_chunk', trial_spec['trial_in_chunk'])
        thisExp.addData('trial_in_block', trial_spec['trial_in_block'])
        thisExp.addData(
            'trial_in_session',
            (trial_spec['block'] - 1) * TRIALS_PER_BLOCK
            + trial_spec['trial_in_block']
        )
        thisExp.addData('visual_stimulus_id', visual_stimulus_id)
        thisExp.addData('target_file', trial_spec['target_relative_file'])
        thisExp.addData('standard_file', trial_spec['standard_relative_file'])
        thisExp.addData('stimulus_file', trial_spec['stimulus_relative_file'])
        thisExp.addData('distractor_id', trial_spec['distractor_id'])
        thisExp.addData('distractor_slot', trial_spec['distractor_slot'])
        thisExp.addData('distractor_sha256', trial_spec['distractor_sha256'])

        dev.activate_line(bitmask=stimuli_code)
    TextComponent text_fixation_cross
      durationEstim = 2.5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      text = +
      wrapWidth = 1.8
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    KeyboardComponent shape_resp
      allowedKeys = '1'
      durationEstim = 2.5
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti
      store = all keys
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    ImageComponent trial_image
      durationEstim = 0.5
      image = $stimulus_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $STIMULUS_DURATION
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  Routine instruct_combined
    RoutineSettingsComponent instruct_combined
      saveStartStop = False
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    TextComponent text_instruct_combined
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Now we will see all the three images again.\n \nPay attention and decide which image is the target image and thus the one you need to respond to. Is it the first one, the second one, or the third one? Tell the examiner verbally.\n \nPress any of the white keys to see the three images together.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_combined
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_combined
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/combined.wav
      startVal [time (s)] = 0.8
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  Routine instruct_oddball
    RoutineSettingsComponent instruct_oddball
      saveStartStop = False
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    TextComponent text_instruct_oddball
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text [set every repeat]:
        INSTRUCTIONS:  In this task you will see a series of images. \n \n There are three different types of images: target, repeating non-target, and distractors. \n \n
        This is a practice round to learn about the task. In the practice round, the target is the following image. Every time you see the target image, respond by pressing the Green key.\n \nNow press any of the white keys to see the target image.
    KeyboardComponent key_instruct_oddball
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_oddball
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/oddball.wav
      startVal [time (s)] = 0.8
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  Routine instruct_verify
    RoutineSettingsComponent instruct_verify
      saveStartStop = False
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    TextComponent text_instruct_verify
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Would you respond to the first, second or third image? \n \nPlease tell the examiner verbally. You can also ask to see the images again if you are not sure.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_verify
      allowedKeys = 'r', 'o'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_verify
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/verify.wav
      startVal [time (s)] = 0.8
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    CodeComponent code_instruct_verify
      Code Type = Py
      End Routine:
        if key_instruct_verify.keys == 'o':  # proceed to main experiment
            practice_loop.finished = True
        current_block = 0
  Routine instruct_begin
    RoutineSettingsComponent instruct_begin
      saveStartStop = False
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    TextComponent text_instruct_begin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Now the study begins. There are 5 blocks. Each block will have a new target image, a new repeating image, and new distractors. At the beginning of the block, you will see the target and the repeating image. \n Remember to press the Green key when you see the target. Do not press any keys otherwise. \n\n Press the white key to go to the first block.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_begin
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_begin
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/begin_block.wav
      startVal [time (s)] = 0.8
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    CodeComponent begin_exp
      Code Type = Py
      Begin Routine:
        current_block=current_block+1

        block_number = current_block
        block_trial_plan = [
            dict(trial_spec) for trial_spec in block_trial_plans[block_number - 1]
        ]
        block_target_file = str(block_target_files[block_number - 1])
        block_standard_file = str(block_standard_files[block_number - 1])
  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
      syncScreenRefresh = False
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    CodeComponent trigger_trial_block_end
      Code Type = Py
      Begin Routine:
        # End of main experiment trial block
        dev.activate_line(bitmask=block_end_code)
        # no need to wait 500ms as this routine lasts 3.0s before experiment ends
  Routine shape_oddball
    RoutineSettingsComponent shape_oddball
      saveStartStop = False
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    TextComponent text_fixation_oddball
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
      wrapWidth = 1.8
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    ImageComponent oddball_practice
      durationEstim = 0.5
      image = $oddball_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $STIMULUS_DURATION
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  Routine instruct_regular
    RoutineSettingsComponent instruct_regular
      saveStartStop = False
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    TextComponent text_instruct_regular
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In the practice round, the repeating non-target is the following image. Every time you see the non-target image, do not respond.\n \nNow press any of the white keys to see the non-target image.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_regular
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_regular
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/regular.wav
      startVal [time (s)] = 0.8
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  Routine shape_regular
    RoutineSettingsComponent shape_regular
      saveStartStop = False
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    TextComponent text_fixation_regular
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
      wrapWidth = 1.8
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    ImageComponent regular_practice
      durationEstim = 0.5
      image = $regular_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $STIMULUS_DURATION
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  Routine instruct_distractor
    RoutineSettingsComponent instruct_distractor
      saveStartStop = False
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    TextComponent text_instruct_distractor
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = In the practice round, the distractor is the following image. Every time you see the distractor image, do not respond.\n \nNow press any of the white keys to see the distractor image.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_distractor
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_distractor
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/distractor.wav
      startVal [time (s)] = 0.8
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  Routine shape_distractor
    RoutineSettingsComponent shape_distractor
      saveStartStop = False
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    TextComponent text_fixation_distractor
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
      wrapWidth = 1.8
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    ImageComponent distractor_practice
      durationEstim = 0.5
      image = $distractor_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $STIMULUS_DURATION
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  Routine shape_combined
    RoutineSettingsComponent shape_combined
      saveStartStop = False
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    TextComponent text_fixation_combined
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = +
      wrapWidth = 1.8
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    ImageComponent oddball_combined
      durationEstim = 0.5
      image = $oddball_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $STIMULUS_DURATION
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    ImageComponent regular_combined
      durationEstim = 0.5
      image = $regular_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = $STIMULUS_DURATION
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    ImageComponent distractor_combine
      durationEstim = 0.5
      image = $distractor_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 2.75
      stopVal [duration (s)] = $STIMULUS_DURATION
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  Routine instruct_begin_block
    RoutineSettingsComponent instruct_begin_block
      saveStartStop = False
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    TextComponent text_instruct_begin_block
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Now begin the task. Remember to press the Green key every time you see the target image and otherwise do not respond.\n\n Please try to respond as quickly and accurately as possible.\n \nPress the green key to begin the task.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_begin_block
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_begin_block
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/begin_block.wav
      startVal [time (s)] = 0.8
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    CodeComponent trigger_trial_block_2
      Code Type = Py
      Begin Routine:
        # Beginning of main experiment trial block
        dev.activate_line(bitmask=block_start_code)
        # no need to wait 500ms because this routine lasts 2.0s before trial triggers
  Routine instruct_block
    RoutineSettingsComponent instruct_block
      saveStartStop = False
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    TextComponent text_instruct_block
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This is block " + current_block + " of 5. \n\n You will now see the target image.\n\n Press any white key to see the target image."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_block
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_block
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/begin_block.wav
      startVal [time (s)] = 0.8
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  Routine trial_regular
    RoutineSettingsComponent trial_regular
      saveStartStop = False
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    TextComponent text_fixation_regular_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
      wrapWidth = 1.8
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    ImageComponent regular_practice_2
      durationEstim = 0.5
      image = $block_target_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $STIMULUS_DURATION
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  Routine instruct_block_common
    RoutineSettingsComponent instruct_block_common
      saveStartStop = False
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    TextComponent text_instruct_block_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = You will now see the repeating non-target image for this block.\n\n Press any white key to see the non-target image."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_block_2
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_block_2
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/begin_block.wav
      startVal [time (s)] = 0.8
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  Routine trial_common
    RoutineSettingsComponent trial_common
      saveStartStop = False
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    TextComponent text_fixation_regular_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
      wrapWidth = 1.8
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    ImageComponent regular_practice_3
      durationEstim = 0.5
      image = $block_standard_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $STIMULUS_DURATION
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  Routine instruct_block_combined
    RoutineSettingsComponent instruct_block_combined
      saveStartStop = False
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    TextComponent text_instruct_combined_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Now we will have a practice round for this block. \n\n Remember to press the Green key when you see the target image, otherwise do not respond. \n\n Press the white key to start the practice round.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_combined_2
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_combined_2
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/combined.wav
      startVal [time (s)] = 0.8
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    CodeComponent begin_practice
      Code Type = Py
      Begin Routine:
        practice_trial_types = ["common","common","common","common","common","common","oddball","oddball","distractor","distractor"]
        np.random.shuffle(practice_trial_types)

        num_correct = 0
  Routine instruct_block_verify
    RoutineSettingsComponent instruct_block_verify
      saveStartStop = False
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    TextComponent text_instruct_verify_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Your score is " + num_correct + " out of 10."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_verify_2
      allowedKeys = 'r', 'o'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_verify_2
      saveStartStop = False
      sound [set every repeat] = resource/voiceover/visual/verify.wav
      startVal [time (s)] = 0.8
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    CodeComponent code_instruct_verify_2
      Code Type = Py
      End Routine:
        if key_instruct_verify.keys == 'o':  # proceed to main experiment
            practice_block.finished = True
  Routine trial_practice
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    CodeComponent set_trial_type_2
      Code Type = Py
      Begin Routine:
        iti = 2.5
        trial_type = practice_trial_types.pop(0)
        if trial_type == "oddball":
            stimulus_file = block_target_file
        elif trial_type == "common":
            stimulus_file = block_standard_file
        else:
            stimulus_file = distractor_file
    TextComponent text_fixation_cross_2
      durationEstim = 2.5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      text = +
      wrapWidth = 1.8
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    KeyboardComponent shape_resp_2
      allowedKeys = '1'
      durationEstim = 2.5
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti
      store = all keys
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    ImageComponent trial_image_2
      durationEstim = 0.5
      image = $stimulus_file
      size = VISUAL_STIMULUS_SIZE
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $STIMULUS_DURATION
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    CodeComponent count_score
      Code Type = Py
      End Routine:
        if trial_type == 'oddball':
            if shape_resp_2.keys == '1':
                num_correct = num_correct + 1
        else:
            if not shape_resp_2.keys:
                num_correct = num_correct + 1
Flow
  Routine _welcome
  Routine __start__
  Routine instruct_oddball
  Routine shape_oddball
  Routine instruct_regular
  Routine shape_regular
  Routine instruct_distractor
  Routine shape_distractor
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    Routine instruct_combined
    Routine shape_combined
    Routine instruct_verify
  LoopTerminator practice_loop
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine instruct_begin
    Routine instruct_block
    Routine trial_regular
    Routine instruct_block_common
    Routine trial_common
    LoopInitiator practice_block loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine instruct_block_combined
      LoopInitiator trails_practice loopType="TrialHandler"
        loopType = random
        nReps = 10
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        Routine trial_practice
      LoopTerminator trails_practice
      Routine instruct_block_verify
    LoopTerminator practice_block
  LoopTerminator blocks
  Routine instruct_begin_block
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = TRIALS_PER_BLOCK
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    Routine trial
  LoopTerminator trials
  Routine __end__
