PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'target': 'A', 'nontarget': 'B'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = visual_oddball_2ob_letter
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine _welcome
    RoutineSettingsComponent _welcome
      saveStartStop = False
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    TextComponent text_welcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome! This task will take approximately 10 minutes.

        Please take a moment to adjust the chair height, chin rest, and sitting posture. Make sure that you feel comfortable and can stay still for a while.


        When you are ready, press any of the white keys to begin.
    KeyboardComponent key_welcome
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_welcome
      saveStartStop = False
      sound [set every repeat] = resource/welcome.wav
      startVal [time (s)] = 0.8
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  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 113 (task ID for visual double letter oddball P300 task)
        task_ID_code = 113
        print("Starting experiment: < Visual Double Letter Oddball Task >. Task ID:", task_ID_code)

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        regular_p300_code = 41
        oddball_p300_code = 42
        distractor_p300_code = 43
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name in ['Cedrus C-POD', 'Cedrus StimTracker Quad'], "Incorrect XID device detected."
            if dev.device_name == 'Cedrus C-POD':
                pod_name = 'C-POD'
            else:
                pod_name = 'M-POD'
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print(f"{pod_name}<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C/M-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    CodeComponent condition_setup
      Code Type = Py
      Begin Experiment:
        import numpy as np


        # --- Stimulus definitions  ---
        # (shape, size, type) for each stimulus category
        STIMULI = {
            "regular":   {"size": 0.4, "text": expInfo['nontarget']},
            "oddball":    {"size": 0.4, "text": expInfo['target']}, #0.5
            "distractor": {"size": 0.4, "text": "arrow"},
        }

        DISTRACTORS = ['>', '<', '^', 'v']*5

        # --- Timing ---
        STIMULUS_DURATION = 0.2
        ITI_RANGE         = (1.4, 1.6)  # seconds

        # --- Trial counts ---
        N_CHUNKS = 10  # chunks × 10 trials = 200 trials total
        N_TRIALS = N_CHUNKS * 20  # 160 standard, 20 oddball, 20 distractor per experiment

        # --- Build trial sequence ---
        # Each 10-trial chunk:
        #   Position 0 : always standard (no oddball/distractor as first trial)
        #   Positions 1–9 : 7× standard + 1× oddball + 1× distractor, shuffled together

        trial_text = []
        trial_sizes = []
        trial_types = []

        for _ in range(N_CHUNKS):
            inner = (
                [("regular",   STIMULI["regular"]["text"],   STIMULI["regular"]["size"])]   * 15
              + [("oddball",    STIMULI["oddball"]["text"],    STIMULI["oddball"]["size"])]     * 2
              + [("distractor", DISTRACTORS.pop(0), STIMULI["distractor"]["size"])] * 2
            )
            np.random.shuffle(inner)  # shuffles all three fields together — sizes stay aligned

            chunk = [("regular", STIMULI["regular"]["text"], STIMULI["regular"]["size"])] + inner

            types, text, sizes = zip(*chunk)
            trial_types  += list(types)
            trial_text  += list(text)
            trial_sizes  += list(sizes)

        # --- Verification ---
        assert len(trial_types) == N_TRIALS
        assert trial_types.count("regular")    == 160
        assert trial_types.count("oddball")    == 20
        assert trial_types.count("distractor") == 20

        # --- ITI list (includes stimulus duration as onset offset) ---
        iti_list = list(
            ITI_RANGE[0]
            + np.random.random(N_TRIALS) * (ITI_RANGE[1] - ITI_RANGE[0])
            + STIMULUS_DURATION
        )
  Routine trial
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    CodeComponent set_shape_edges
      Code Type = Py
      Begin Routine:
        # Pop the next trial's properties from the lists
        iti          = iti_list.pop(0)
        shape_text  = trial_text.pop(0)
        shape_size   = trial_sizes.pop(0)
        trial_type   = trial_types.pop(0)

        # Derive oddball/distractor flags from trial_type
        shape_is_oddball    = trial_type == "oddball"
        shape_is_distractor = trial_type == "distractor"

        # Log to data table
        thisExp.addData('trial_type',          trial_type)
        thisExp.addData('shape_is_oddball',    shape_is_oddball)
        thisExp.addData('shape_is_distractor', shape_is_distractor)
        thisExp.addData('iti',                 iti - STIMULUS_DURATION)
    TextComponent stimulus_text
      color = black
      durationEstim = 0.2
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $STIMULUS_DURATION
      text [set every repeat] = $shape_text
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    TextComponent text_fixation_cross
      durationEstim = 1.3
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti
      text = .
      wrapWidth = 1.8
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    CodeComponent trigger_tone
      Code Type = Py
      Begin Routine:
        pulse_started = False
      Each Frame:
        if stimulus_text.status == STARTED and not pulse_started:
            if shape_is_oddball:
                dev.activate_line(bitmask=oddball_p300_code)
            elif shape_is_distractor:
                dev.activate_line(bitmask=distractor_p300_code)
            else:
                dev.activate_line(bitmask=regular_p300_code)

            pulse_started = True
    KeyboardComponent shape_resp
      allowedKeys = '1','2'
      durationEstim = 2.5
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti
      store = all keys
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  Routine instruct_combined
    RoutineSettingsComponent instruct_combined
      saveStartStop = False
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    TextComponent text_instruct_combined
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Now we will see all the three letters or arrows again. Pay attention and decide which shape you need to press the green button. Press any of the white keys to continue."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_combined
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_combined
      saveStartStop = False
      sound [set every repeat] = resource/instruct_combined.wav
      startVal [time (s)] = 0.8
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  Routine instruct_oddball
    RoutineSettingsComponent instruct_oddball
      saveStartStop = False
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    TextComponent text_instruct_oddball
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"INSTRUCTIONS: \n\n In this task you will see a series of letters. \n\n There are two different letters, and arrow distractors. \n\n In the next screen, you will see the target letter. Every time you see the following target letter, respond by pressing the Green key.\n \nNow press any of the white keys to see the letter."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_oddball
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_oddball
      saveStartStop = False
      sound [set every repeat] = resource/instruct_oddball.wav
      startVal [time (s)] = 0.8
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  Routine instruct_verify
    RoutineSettingsComponent instruct_verify
      saveStartStop = False
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    TextComponent text_instruct_verify
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Would you press the green button to the first shape, second shape or third shape? \n \nPlease tell the examiner verbally. You can also ask to see the shapes again if you are not sure."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_verify
      allowedKeys = 'r', 'o'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_verify
      saveStartStop = False
      sound [set every repeat] = resource/instruct_verify.wav
      startVal [time (s)] = 0.8
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    CodeComponent code_instruct_verify
      Code Type = Py
      End Routine:
        if key_instruct_verify.keys == 'o':  # proceed to main experiment
            practice_loop.finished = True
  Routine instruct_begin
    RoutineSettingsComponent instruct_begin
      saveStartStop = False
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    TextComponent text_instruct_begin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Remember to press the Green key every time you see the target letter " + STIMULI['oddball']['text'] + ", and otherwise press the Red key. Please try to respond as quickly and accurately as possible.\n \nPress the green key to begin the task.\n \nRemember, the target letter is " + expInfo['target']
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_begin
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_begin
      saveStartStop = False
      sound [set every repeat] = resource/instruct_begin.wav
      startVal [time (s)] = 0.8
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    CodeComponent trigger_trial_block
      Code Type = Py
      Begin Routine:
        # Beginning of main experiment trial block
        dev.activate_line(bitmask=block_start_code)
        # no need to wait 500ms because this routine lasts 2.0s before trial triggers
  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
      syncScreenRefresh = False
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    CodeComponent trigger_trial_block_end
      Code Type = Py
      Begin Routine:
        # End of main experiment trial block
        dev.activate_line(bitmask=block_end_code)
        # no need to wait 500ms as this routine lasts 3.0s before experiment ends
  Routine shape_oddball
    RoutineSettingsComponent shape_oddball
      saveStartStop = False
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    TextComponent text_fixation_oddball
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = .
      wrapWidth = 1.8
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    TextComponent text_oddball_
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.5
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = $STIMULUS_DURATION
      text = $STIMULI["oddball"]["text"]
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  Routine instruct_regular
    RoutineSettingsComponent instruct_regular
      saveStartStop = False
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    TextComponent text_instruct_regular
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Every time you see the following letter, press the Red key. \n \n Now press any of the white keys to see the letter."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_regular
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_regular
      saveStartStop = False
      sound [set every repeat] = resource/instruct_regular.wav
      startVal [time (s)] = 0.8
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  Routine shape_regular
    RoutineSettingsComponent shape_regular
      saveStartStop = False
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    TextComponent text_fixation_regular
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = .
      wrapWidth = 1.8
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    TextComponent text_regular_
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.5
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $STIMULUS_DURATION
      text = $STIMULI["regular"]["text"]
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  Routine instruct_distractor
    RoutineSettingsComponent instruct_distractor
      saveStartStop = False
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    TextComponent text_instruct_distractor
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Every time you see an arrow, a ^, v, < or >, press the Red key. Now press any of the white keys to see one example of the arrows."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_distractor
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_distractor
      saveStartStop = False
      sound [set every repeat] = resource/instruct_distractor.wav
      startVal [time (s)] = 0.8
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  Routine shape_distractor
    RoutineSettingsComponent shape_distractor
      saveStartStop = False
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    TextComponent text_fixation_distractor
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = .
      wrapWidth = 1.8
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    TextComponent text_distractor_
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $STIMULUS_DURATION
      text = ^
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  Routine shape_combined
    RoutineSettingsComponent shape_combined
      saveStartStop = False
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    TextComponent text_fixation_combined
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = .
      wrapWidth = 1.8
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    TextComponent text_oddball_combined
      color = black
      durationEstim = 0.5
      letterHeight = 0.5
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $STIMULUS_DURATION
      text = $STIMULI["oddball"]["text"]
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    TextComponent text_regular_combined
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = 0.5
      text = $STIMULI["regular"]["text"]
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    TextComponent text_distractor_combined
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 2.9
      stopVal [duration (s)] = $STIMULUS_DURATION
      text = ^
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  Routine instruct_combined_2
    RoutineSettingsComponent instruct_combined_2
      saveStartStop = False
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    TextComponent text_instruct_combined_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This time, pay attention and decide which shape you need to press the Red button. Press any of the white keys to continue."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_combined_2
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_combined_2
      saveStartStop = False
      sound [set every repeat] = resource/instruct_combined2.wav
      startVal [time (s)] = 0.8
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  Routine instruct_verify_2
    RoutineSettingsComponent instruct_verify_2
      saveStartStop = False
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    TextComponent text_instruct_verify_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Would you press the Red button to the first shape, second shape or third shape? \n \nPlease tell the examiner verbally. You can also ask to see the shapes again if you are not sure."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_verify_2
      allowedKeys = 'r', 'o'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_verify_2
      saveStartStop = False
      sound [set every repeat] = resource/instruct_verify2.wav
      startVal [time (s)] = 0.8
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    CodeComponent code_instruct_verify_2
      Code Type = Py
      End Routine:
        if key_instruct_verify_2.keys == 'o':  # proceed to main experiment
            practice_loop_2.finished = True
  Routine countdown
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $str(3-int(t))
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  Routine instruct_practice
    RoutineSettingsComponent instruct_practice
      saveStartStop = False
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    TextComponent text_instruct_combined_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Now we will do a short practice test. Every time you see the target letter, press the Green button as quickly as possible. Everytime you see other letters or arrows, press the Red button as quickly as possible.\n \n Remember, the target letter is " + expInfo['target']
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_combined_3
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_combined_3
      saveStartStop = False
      sound [set every repeat] = resource/instruct_practice.wav
      startVal [time (s)] = 0.8
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  Routine trial_practice
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    CodeComponent set_shape_edges_2
      Code Type = Py
      Begin Routine:
        import random

        testlist = [expInfo['target'],expInfo['target'], expInfo['nontarget'], expInfo['nontarget'],'^','v','>','<']
        random.shuffle(testlist)
        shape_text  = testlist.pop(0)
    TextComponent stimulus_text_2
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $shape_text
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    TextComponent text_fixation_cross_2
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.2
      text = .
      wrapWidth = 1.8
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    CodeComponent trigger_tone_2
      Code Type = Py
      Begin Routine:
        pulse_started = False
      Each Frame:
        if stimulus_text.status == STARTED and not pulse_started:
            if shape_is_oddball:
                dev.activate_line(bitmask=oddball_p300_code)
            elif shape_is_distractor:
                dev.activate_line(bitmask=distractor_p300_code)
            else:
                dev.activate_line(bitmask=regular_p300_code)

            pulse_started = True
    KeyboardComponent shape_resp_2
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.2
      store = all keys
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  Routine instruct_verify_practice
    RoutineSettingsComponent instruct_verify_practice
      saveStartStop = False
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    TextComponent text_instruct_verify_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Are you ready to begin the task?
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_verify_3
      allowedKeys = 'r', 'o'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    CodeComponent code_instruct_verify_3
      Code Type = Py
      End Routine:
        if key_instruct_verify_3.keys == 'o':  # proceed to main experiment
            practice_loop_3.finished = True
Flow
  Routine _welcome
  Routine __start__
  Routine instruct_oddball
  Routine shape_oddball
  Routine instruct_regular
  Routine shape_regular
  Routine instruct_distractor
  Routine shape_distractor
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    Routine instruct_combined
    Routine shape_combined
    Routine instruct_verify
  LoopTerminator practice_loop
  LoopInitiator practice_loop_2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    Routine instruct_combined_2
    Routine shape_combined
    Routine instruct_verify_2
  LoopTerminator practice_loop_2
  LoopInitiator practice_loop_3 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    Routine instruct_practice
    Routine countdown
    LoopInitiator trials_practice loopType="TrialHandler"
      loopType = sequential
      nReps = 15
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      Routine trial_practice
    LoopTerminator trials_practice
    Routine instruct_verify_practice
  LoopTerminator practice_loop_3
  Routine instruct_begin
  Routine countdown
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = N_TRIALS
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    Routine trial
  LoopTerminator trials
  Routine __end__
